PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = context
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent ITI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
    TextComponent trialInstrText
      wrapWidth = 20
      color = black
      text = Predict whether the customer will get sick from this food.
      stopVal [duration (s)] = 3.0
      pos = [0, 0.8]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent restaurantText
      color = blue
      text [set every repeat] = $restaurant
      stopVal [duration (s)] = 3.0
      pos = [0, +0.35]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    ImageComponent foodImg
      stopVal [duration (s)] = 3.0
      pos = [0, 0.0]
      startVal [time (s)] = 1
      image [set every repeat] = 'foods/' + $food + '.png'
      size = [0.5, 0.5]
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    TextComponent fixationJitterText
      color = black
      text = +
      stopVal [duration (s)] = 0.5
      durationEstim = 0.5
      startVal [time (s)] = 5.0
      letterHeight = 0.1
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    KeyboardComponent responseKey
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 1
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    ImageComponent sickImg
      stopVal [duration (s)] = 3.0
      pos = [-0.5, -0.6]
      startVal [time (s)] = 1
      image = images/sick.png
      size = [0.3, 0.45]
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    ImageComponent notsickImg
      stopVal [duration (s)] = 3
      pos = [+0.5, -0.6]
      startVal [time (s)] = 1.0
      image = images/smiley.png
      size = [0.3, 0.45]
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    TextComponent fixationITIText
      color = black
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent Jitter
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 5.0
    TextComponent sickHighlight
      text = _
      stopVal [duration (s)] = 3
      pos = [-0.5, -0.35]
      startVal [time (s)] = 1
      letterHeight = 1.0
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    TextComponent notsickHighlight
      text = _
      stopVal [duration (s)] = 3
      pos = [0.5, -0.35]
      startVal [time (s)] = 1
      letterHeight = 1
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    CodeComponent highlightChoice
      Begin Routine:
        # don't highlight anything initially
        #
        sickHighlight.setOpacity(0)
        notsickHighlight.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
      Each Frame:
        # highlight subject's response
        #
        if responseKey.keys:
            if responseKey.keys == 'left': # sick
                sickHighlight.opacity = 1
                notsickHighlight.opacity = 0
            elif responseKey.keys == 'right': # not sick
                sickHighlight.opacity = 0
                notsickHighlight.opacity = 1
            else:
                assert False, 'Can only have one response, left or right'
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
    TextComponent correctText
      color = blue
      text = CORRECT
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      startVal [time (s)] = 4.0
      font = Arial Bold
      letterHeight = 0.1
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    TextComponent wrongText
      color = red
      text = WRONG
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      startVal [time (s)] = 4.0
      font = Arial Bold
      letterHeight = 0.1
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    TextComponent timeoutText
      color = purple
      text = TIMEOUT
      stopVal [duration (s)] = 1.0
      pos = [0, -0.3]
      startVal [time (s)] = 4
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent sickFeedback
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 4.0
      image = images/sick.png
      size = [0.3, 0.45]
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    ImageComponent notsickFeedback
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 4.0
      image = images/smiley.png
      size = [0.3, 0.45]
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    TextComponent gotSickText
      color = black
      text = The customer got sick!
      stopVal [duration (s)] = 1.0
      pos = [0, -0.5]
      startVal [time (s)] = 4
      letterHeight = 0.075
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    TextComponent didntGetSickText
      color = black
      text = The customer didn't get sick!
      stopVal [duration (s)] = 1.0
      pos = [0, -0.5]
      startVal [time (s)] = 4.0
      letterHeight = 0.075
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    CodeComponent showFeedback
      Begin Routine:
        # clear the feedback
        isFeedbackShown = False
        correctText.setOpacity(0)
        wrongText.setOpacity(0)
        timeoutText.setOpacity(0)
        sickFeedback.setOpacity(0)
        notsickFeedback.setOpacity(0)
        gotSickText.setOpacity(0)
        didntGetSickText.setOpacity(0)
        # hack to re-render the texts with new opacity
        correctText.setText(correctText.text)
        wrongText.setText(wrongText.text)
        timeoutText.setText(timeoutText.text)
        gotSickText.setText(gotSickText.text)
        didntGetSickText.setText(didntGetSickText.text)
      Each Frame:
        # show user some feedback
        #
        if t >= 4.0 and not isFeedbackShown: # TODO don't hardcode
            isFeedbackShown = True
            if not responseKey.keys: # no response was made
                timeoutText.setOpacity(1)
                timeoutText.setText(timeoutText.text)
            else: # response was made
                if responseKey.corr == 1:
                    correctText.setOpacity(1)
                    wrongText.setOpacity(0)
                elif responseKey.corr == 0:
                    correctText.setOpacity(0)
                    wrongText.setOpacity(1)
                else:
                    print responseKey.corr
                    assert False, "responseKey.corr = 0 or 1"

                if sick == 'Yes':
                    sickFeedback.setOpacity(1)
                    notsickFeedback.setOpacity(0)
                    gotSickText.setOpacity(1)
                    didntGetSickText.setOpacity(0)
                elif sick == 'No':
                    sickFeedback.setOpacity(0)
                    notsickFeedback.setOpacity(1)
                    gotSickText.setOpacity(0)
                    didntGetSickText.setOpacity(1)
                else:
                    print sick
                    assert False, "sick can only be Yes or No"

                # hack to redraw the texts with new opacity
                correctText.setText(correctText.text)
                wrongText.setText(wrongText.text)
                gotSickText.setText(gotSickText.text)
                didntGetSickText.setText(didntGetSickText.text)
  Routine feedback
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = irrelevant.xlsx
    loopType = random
    nReps = 1
    Selected rows = range(1,5)
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    conditions:
      [{u'food': None, u'corrAns': None, u'sick': None, u'restaurant': u'Training'},
      {u'food': u'mexican_food1', u'corrAns': u'left', u'sick': u'Yes', u'restaurant': u"Molina's Cantina"},
      {u'food': u'mexican_food2', u'corrAns': u'right', u'sick': u'No', u'restaurant': u"Molina's Cantina"},
      {u'food': u'mexican_food1', u'corrAns': u'left', u'sick': u'Yes', u'restaurant': u'Restaurante Arroyo'},
      {u'food': u'mexican_food2', u'corrAns': u'right', u'sick': u'No', u'restaurant': u'Restaurante Arroyo'},
      {u'food': None, u'corrAns': None, u'sick': None, u'restaurant': u' Test'},
      {u'food': u'mexican_food1', u'corrAns': u'left', u'sick': u'Yes', u'restaurant': u"Molina's Cantina"},
      {u'food': u'mexican_food1', u'corrAns': u'left', u'sick': u'Yes', u'restaurant': u'Restaurante Arroyo'},
      {u'food': u'mexican_food3', u'corrAns': None, u'sick': None, u'restaurant': u"Molina's Cantina"},
      {u'food': u'mexican_food3', u'corrAns': None, u'sick': None, u'restaurant': u'Restaurante Arroyo'}]
    Routine trial
  LoopTerminator trials
